OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Spatial Filter => #1
  Spatial Filter Coefficients = 1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0
  Number of Output Channels = 8
  Number of Input Channels = 35
  Filter matrix file =
-> Temporal filter "8-13" => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Spectral analysis (FFT) => #3
  Spectral components = Amplitude
#3.Amplitude -> Time-frequency map display 1-8
  Time Scale = 10
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Data=#2 -> Signal display 1-8
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#1 -> Signal display raw 1-8
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#0.Signal stream -> 0xc73e83ec Spatial Filter => #7
  Spatial Filter Coefficients = 0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0
  Number of Output Channels = 8
  Number of Input Channels = 35
  Filter matrix file =
-> 0xc73e83ec Temporal filter "8-13" => #8
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Spectral analysis (FFT) => #9
  Spectral components = Amplitude
#9.Amplitude -> 0xc73e83ec Time-frequency map display 9-16
  Time Scale = 10
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Data=#8 -> 0xc73e83ec Signal display 9-16
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#7 -> 0xc73e83ec Signal display raw 9-16
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#0.Signal stream -> 0xc73e83ec Spatial Filter => #13
  Spatial Filter Coefficients = 0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;0
  Number of Output Channels = 8
  Number of Input Channels = 35
  Filter matrix file =
-> 0xc73e83ec Temporal filter "8-13" => #14
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Spectral analysis (FFT) => #15
  Spectral components = Amplitude
#15.Amplitude -> 0xc73e83ec Time-frequency map display 17-24
  Time Scale = 10
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Data=#14 -> 0xc73e83ec Signal display 17-24
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#13 -> 0xc73e83ec Signal display raw 17-24
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#0.Signal stream -> 0xc73e83ec Spatial Filter => #19
  Spatial Filter Coefficients = 0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0;0;
    0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;0;1;0;0;0
  Number of Output Channels = 8
  Number of Input Channels = 35
  Filter matrix file =
-> 0xc73e83ec Temporal filter "8-13" => #20
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Spectral analysis (FFT) => #21
  Spectral components = Amplitude
#21.Amplitude -> 0xc73e83ec Time-frequency map display 25-32
  Time Scale = 10
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Data=#20 -> 0xc73e83ec Signal display 25-32
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#19 -> 0xc73e83ec Signal display raw 25-32
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false

Acquisition client => #25
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#25.Signal stream -> Spatial Filter => #26
  Spatial Filter Coefficients = 1;0;0;0;0;0;0;0;0;0;0
  Number of Output Channels = 1
  Number of Input Channels = 11
  Filter matrix file =
-> Temporal filter "8-13" => #27
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Spectral analysis (FFT) => #28
  Spectral components = Amplitude
#28.Amplitude -> Time-frequency map display OpenBCI
  Time Scale = 10
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Data=#27 -> Signal display OpenBCI
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Data=#26 -> Signal display raw OpenBCI
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = true
  Multiview = false
